// https://gist.github.com/romainGuiet/cf42f3b1d31222a76d602dfe2f028894
dir = "D:/UCSF/macrophage_video_analysis/processed/BG_corrected/test2/";
output_dir = "D:/UCSF/macrophage_video_analysis/processed/BG_corrected/test2/";
fileList = getFileList(dir);

//activate batch mode
setBatchMode(true);

// LOOP to process the list of files
for (i = 0; i < lengthOf(fileList); i++) {
	// define the "path" 
	// by concatenation of dir and the i element of the array fileList
	current_imagePath = dir+fileList[i];
	// check that the currentFile is not a directory
	if (!File.isDirectory(current_imagePath)) {
		if (endsWith(current_imagePath, ".tif")) {
            // open the image and split
            run("Bio-Formats Macro Extensions");
            Ext.openImagePlus(current_imagePath);
            //open(current_imagePath);
            // get some info about the image
            img_name = getTitle();
            print(img_name);

            run("Split Channels");

            selectImage("C3-"+img_name);
            run("Enhance Contrast...", "saturated=1 equalize");

            command_str = "c1=C1-" + img_name + " c2=C2-" + img_name + " c3=C3-" + img_name + " create";
            run("Merge Channels...", command_str);

            currentImage_name = substring(img_name,0,lengthOf(img_name)-4);
            currentImage_name = currentImage_name+"2";
            print(currentImage_name);
            saveAs("tiff", currentImage_name);
        }
        // make sure to close every images before opening the next one
        run("Close All");
	}
}
print('Done!');
setBatchMode(false);
